'CR3000 Series Datalogger
'To create a different opening program template, type in new
'instructions and select Template | Save as Default Template
'date:
'program author:

'Declare Public Variables
'Example:
Public PTemp, batt_volt
Public testport(16),i
'Declare Other Variables
'Example:
'Dim Counter

'Declare Constants
'Example:
'CONST PI = 3.141592654	

'Define Data Tables
DataTable (Test,1,1000)
	DataInterval (0,1,min,10)
	Minimum (1,batt_volt,FP2,0,False)
	Sample (1,PTemp,FP2)
EndTable

'Define Subroutines
'Sub
	'EnterSub instructions here
'EndSub

'Main Program
BeginProg
	Scan (1,min,0,0)
		PanelTemp (PTemp,250)
		Battery (batt_volt)
	  PortSet(1,1)
	  For i=1 To 16
		PulsePort(2,10000)
		delay(0,2,sec)
    Next
    
    PortSet(1,0)
    
		'Enter other measurement instructions
		'Call Output Tables
		'Example:
		CallTable Test
	NextScan
EndProg

