'CR3000 Series Datalogger
'To create a different opening program template, type in new
'instructions and select Template | Save as Default Template
'
' Program to test radiation shield, HMP110 and thermistor
'date: 20151030
'program author: Jonathan Thom

'Declare Public Variables
'Example:
Public PTemp, batt_volt, airT110, rh110, airT, fansp,trh(2)
Alias trh(1)=temp
Alias trh(2)=rh

'Declare Other Variables
'Example:
'Dim Counter

'Declare Constants
'Example:
'CONST PI = 3.141592654	

'Define Data Tables.
DataTable (Test,1,-1) 'Set table size to # of records, or -1 to autoallocate.
	DataInterval (0,15,Sec,10)
	Minimum (1,batt_volt,FP2,False,False)
	Sample (1,PTemp,FP2)
	Average(1,airT,FP2,false)
	Average(1,airT110,FP2,false)
	Average(1,rh110,FP2,false)
	Average(1,fansp,FP2,false)
	Average(1,temp,fp2,false)
	average(1,rh,fp2,false)
EndTable

'Define Subroutines
'Sub
	'EnterSub instructions here
'EndSub

'Main Program
BeginProg
	Scan (1,Sec,0 ,0)
		PanelTemp (PTemp,250)
		Battery (batt_volt)
		Therm109 (airT,1,15,Vx1,0,_60Hz,1.0,0)
		VoltSe (rh110,1,mV5000,27,True,0,_60Hz,.02,0)
		VoltSe(airT110,1,mV5000,28,1,0,_60Hz,.024,-40.)
		PulseCount (fansp,1,4,0,1,1.0,0)
		SDI12Recorder(trh(),3,4,"M!",1.0,0)
		If TimeIntoInterval (0,60,Sec) Then PortSet(5,1)
		If TimeIntoInterval (30,60,sec) Then PortSet(5,0)
		If TimeIntoInterval (30,60,sec) Then PortSet(6,1)
		If Timeintointerval (0,60,sec) Then PortSet(6,0)
		'Enter other measurement instructions
		'Call Output Tables
		'Example:
		CallTable Test
	NextScan
EndProg

