'CR6 Series
'Created by Short Cut (3.1)

'Declare Variables and Units
Public BattV
Public PTemp_C
Public BP_mbar

Units BattV=Volts
Units PTemp_C=Deg C
Units BP_mbar=mbar

'Define Data Tables
DataTable(labdata,True,-1)
  DataInterval(0,5,Sec,10)
  Sample(1,BattV,FP2)
  Sample(1,PTemp_C,FP2)
  Sample(1,BP_mbar,FP2)
EndTable

DataTable(Table2,True,-1)
  DataInterval(0,1440,Min,10)
  Minimum(1,BattV,FP2,False,False)
EndTable

'Main Program
BeginProg
  'Main Scan
  Scan(5,Sec,1,0)
    'Default Datalogger Battery Voltage measurement 'BattV'
    Battery(BattV)
    'Default Wiring Panel Temperature measurement 'PTemp_C'
    PanelTemp(PTemp_C,60)
    'CS106 Barometric Pressure Sensor measurement 'BP_mbar'
    PortSet(U3,1)
    VoltSe(BP_mbar,1,mV5000,U1,1,0,60,0.240,500)
    If TimeIntoInterval(0,60,sec) Then
      PortSet(C1,1)
      PortSet(C2,0)
    EndIf
    If TimeIntoInterval(30,60,sec) Then
      PortSet(C2,1)
      PortSet(C1,0)
    EndIf
    'Call Data Tables and Store Data
    CallTable labdata
    CallTable Table2
  NextScan
EndProg
